
//nrn_load_dll("nrnmech.dll")
load_file("nrngui.hoc")
load_proc("nrnmainmenu")
load_file("localcell.hoc")

dt = 1e-3 // 1 microsecond resolution

tstop = 700 // how many milliseconds to stimulate

objref ganglion
ganglion = new localcell()

v_init=-70 // V_rest for hodgkin-huxley

nums = 40
if (name_declared("x") == 5){
	nums = x
}

objectvar stim
ganglion.soma stim = new ChR2test(0.5)
stim.irrMag =nums //0.34
stim.delay = 100
stim.on_dur = 500
stim.off_dur = 100
stim.reps = 1

objectvar stim_ax[mat_nseg]

objref irr_file
irr_file = new File()
irr_file.ropen("matlab_irrmag_out")
objref locs_file
locs_file = new File()
locs_file.ropen("matlab_chr2locs_out")


for i = 0, mat_nseg-1 {
	temp_locs = locs_file.scanvar()
	axon stim_ax[i] = new ChR2test(temp_locs)
	//print temp_locs
	
	temp_irr_mag = irr_file.scanvar()
	stim_ax[i].irrMag = temp_irr_mag
	//print temp_irr_mag
	
	stim_ax[i].delay = 50
	stim_ax[i].on_dur = 500
	stim_ax[i].off_dur = 50
	stim_ax[i].reps = 1
	
}

objref p,g,k,l
objref vsoma,lstim,isod,iopt, s1, s2, s3, s4, s5, s6
objref vaxon

s1 = new Vector()
s2 = new Vector()
s3 = new Vector()
s4 = new Vector()
s5 = new Vector()
s6 = new Vector()

vsoma = new Vector()
lstim = new Vector()
isod = new Vector()
iopt = new Vector()

vaxon = new Vector()

s1.record(&stim.s1)
s2.record(&stim.s2)
s3.record(&stim.s3)
s4.record(&stim.s4)
s5.record(&stim.s5)
s6.record(&stim.s6)

vsoma.record(&soma.v(.5))
lstim.record(&stim.irr)
isod.record(&soma.ina(0.5))
iopt.record(&stim.ilit)

vaxon.record(&axon.v(1))

run()

objref fobj
fobj = new File()

/*
fobj.wopen("s1.dat")
s1.vwrite(fobj)
fobj.close()
fobj.wopen("s2.dat")
s2.vwrite(fobj)
fobj.close()
fobj.wopen("s3.dat")
s3.vwrite(fobj)
fobj.close()
fobj.wopen("s4.dat")
s4.vwrite(fobj)
fobj.close()
fobj.wopen("s5.dat")
s5.vwrite(fobj)
fobj.close()
fobj.wopen("s6.dat")
s6.vwrite(fobj)
fobj.close()
*/

/*
fobj.wopen("iopt.dat")
iopt.vwrite(fobj)
fobj.close()
fobj.wopen("isod.dat")
isod.vwrite(fobj)
fobj.close()
*/

fobj.wopen("lstim.dat")
lstim.vwrite(fobj)
fobj.close()
fobj.wopen("vsoma.dat")
vsoma.vwrite(fobj)
fobj.close()
fobj.wopen("vaxon.dat")
vaxon.vwrite(fobj)
fobj.close()
